PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {u'motbox_path': u'../', u'participant': u'999', u'protocol': u'1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1200]
  color = $[0.004,0.004,0.004]
  expName = noiseMot_exp1_noise
  logging level = data
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Routines
  Routine intro_block
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        First, there will be training part (12 trials). You will see three types of difficulty (from easiest to most difficult)

        Press space
    CodeComponent code_2
      Code Type = Auto->JS
      Begin Experiment:
        #gabor_preview_pth = 'gabors/gabor_contr{:.1f}.png'.format(float(expInfo['t_contr']))

        prot_file = 'protocols/P%03d_noise.csv' % int(expInfo['protocol'])
      Begin Routine:
        win.blendMode = 'add'
      End Routine:
        win.blendMode = 'avg'
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_background
      Code Type = Auto->JS
      Begin Routine:
        noise_backg_pth = 'noise/noise%03d.png' % noise_id
        win.blendMode = 'add'
      Each Frame:
        win.blendMode = 'avg'
      End Routine:
        win.blendMode = 'avg'
    ImageComponent image
      image [set every repeat] = $noise_backg_pth
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine welcome
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, your task is to track moving objects. In each trial, there will be 8 static objects, while 4 of them will blink. After 2 seconds, all objects became indistinguishible and began to move. Your task is to track the originally highlighet objects.
        After the movement ends, your task is to click on the originally highlighted objects

        Press space to continue..
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        sys.path.insert(0, expInfo['motbox_path']) # to load module from neighbouring folder
        import motbox
        import time
        import copy


        nTargets = 4 # number of targets (that will be highlighted in cue phase)
        n_objects = 8 # number of objects (could be loaded automatically from file

        # configure experiment
        trial_length = 6 # duration of trial in seconds
        cue_time = 2     # duration of cueing phase in seconds

        # hide mouse cursor
        win.mouseVisible = False
      Begin Routine:
        # probably redudndant
        win.mouseVisible = False

        # load gabor based on the used contrast
        gabor_name_pth = 'gabors/gabor_contr_id_%01d.png' % t_contr

        # noise needs to be created each routine, I run into some problems, when reusing old objects
        noise_backg = visual.ImageStim(
            win=win, name='image',
            image=noise_backg_pth, mask=None,
            ori=0, pos=(0, 0), size=(2, 2),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-3.0)

        # same for the objects. This is a placeholder for one object
        o1 = visual.ImageStim(
            win=win, name='o1',units='pix',
            image=gabor_name_pth, mask=None,
            ori=0, pos=(10000, 10000), size=(64, 64),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-1.0)

        # and circular highlighting
        # this is related to current experiment (see poster)
        p1 = visual.Polygon(
            win=win, name='p1',units='pix',
            edges=50, size=(64, 64),
            ori=0, pos=(10000, 10000),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=None, fillColorSpace='rgb',
            opacity=1, depth=-3.0, interpolate=True)


        # load trajectory from file (this was generated using motrack package
        track_filename = 'trajectories/T%03d.csv' % trajectory_id

        # some intitial setup
        clicked_name_correct = [];
        mouse_x_correct = [];
        mouse_y_correct = [];
        mouse_time_correct = [];

        # initialize motbox trajectory
        T = motbox.Track()
        T.load_from_csv(track_filename, delim = ',') # load it from file

        # scale it with given pixels per inch. This needs to be set for proper values
        T.scale(30) # px per inch

        # Puppeteer handles the actual moving of objects
        P = motbox.Puppeteer()
        P.track = T
        # this creates multiple copies from the template
        P.clone_template_psychopy(o1, n_objects) $

        # create polygons highlighting targets
        for x_obj3 in P.objects:
            x_obj3.pressed   = False
            x_obj3.mmark      = copy.copy(p1)
            x_obj3.mmark.name = "p1_{}".format(x_obj3.name)

        # this is related to current experiment, in half of trials, objects were highlighted in query phase
        shouldMark = mark_type == 'mark'
        nClicks = 0

        win.blendMode = 'add' # set proper blending mode
        iframe = 1 # this is iterator through frames

        size_blink  = 8       # how many frames are there between size change
        size_big_coef    = 2  # how large are objects when their size is increased
        size_normal_coef = 1  # normal size coeficient, should be 1
        size_normal = P.objects[0].size
        size_coef = size_normal_coef

        # set start time
        # in this particular study, we are not randomizing starts of the trials
        # to randomize starts, set variable start_time2 to value given value

        start_time2 = 0
        stop_time = cue_time + trial_length

        # mark
        first_mark = 1
      Each Frame:
        noise_backg.setAutoDraw(True)
        o1.setAutoDraw(False)
        p1.setAutoDraw(False)

        # cue phase
        if t >= 0 and t <= cue_time:

            # simple iterator through frames
            # we are not using t, as it is not an integer (we could round though)
            iframe = iframe + 1

            # whether we should change size
            # there should be color changing or something else, but it was difficult to
            # get proper color schemes with blending
            if (iframe % size_blink) == 0:
                if size_coef == size_normal_coef:
                    size_coef = size_big_coef
                else:
                    size_coef = size_normal_coef
            # change size for targets
            for i1 in range(nTargets):
                P.objects[i1].size = size_normal * size_coef

            # update and draw objects
            P.update_positions_psychopy(start_time2)
            for i2 in range(n_objects):
                P.objects[i2].draw()

        # move phase
        if t >= cue_time and t <= stop_time:
            # normalize sizes
            for i2 in range(nTargets):
                P.objects[i2].size = size_normal
            # update and draw objects
            P.update_positions_psychopy(start_time2 + t-cue_time)
            for i2 in range(n_objects):
                P.objects[i2].draw()


        # query phase
        if t > stop_time:
            # this is used only in trials with target highlighting
            # basically, it draws a circle around the objects
            if (first_mark and shouldMark):
                first_mark = 0;
                for x_obj2 in P.objects:
                    x_obj2.mmark.pos = x_obj2.pos
                    x_obj2.mmark.setAutoDraw(True)
            # repeat, until participant clicked on 4 objects
            if (nClicks < nTargets):
                # we need mouse for that
                win.mouseVisible = True
                # this code handles that we can't click on same object multiple times
                for x_obj2 in P.objects:
                    if mouse.isPressedIn(x_obj2, buttons=[0]) and x_obj2.pressed == False:
                        x, y = mouse.getPos()

                        x_obj2.pressed  = True
                        nClicks = nClicks + 1
                        x_obj2.size = x_obj2.size * 2 # clicked object increases its size

                        # add information about the clicked objects
                        clicked_name_correct.append(x_obj2.name)
                        mouse_x_correct.append(x)
                        mouse_y_correct.append(y)
                        mouse_time_correct.append(trialClock.getTime())
                # update and draw objects (note that 'update' keeps object at the same locations
                P.update_positions_psychopy(start_time2 + stop_time-cue_time)
                for i2 in range(n_objects):
                    P.objects[i2].draw()

            else: # all foiur targets were clicked, ending routine
                win.mouseVisible = False
                continueRoutine = False
                for i2 in range(n_objects):
                    P.objects[i2].mmark.setAutoDraw(False)
                    P.objects[i2].setAutoDraw(False)
                noise_backg.setAutoDraw(False)
                time.sleep(0.3)
      End Routine:
        # save mouse data
        win.blendmode = 'avg'
        mouse.clicked_name = clicked_name_correct
        mouse.x = mouse_x_correct
        mouse.y = mouse_y_correct
        mouse.time = mouse_time_correct
    ImageComponent o1
      image [set every repeat] = $gabor_name_pth
      pos = (10000, 10000)
      size = (64, 64)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse
      clickable = P.objects[0],P.objects[1],P.objects[2],P.objects[3],P.objects[4],P.objects[5],P.objects[6],P.objects[7]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 4
      timeRelativeTo = routine
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    PolygonComponent p1
      fillColor = $None
      nVertices = 50
      pos = (10000, 10000)
      shape = regular polygon...
      size = (64, 64)
      startVal [time (s)] = 0.0
      units = pix
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  Routine bye
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thanks!
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  Routine before_trials
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now the actual experiment begins




        Press space
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  Routine intro_block
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = protocols\P_practice_noise.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('prot_id', 0), ('trial_id', 1), ('noise_id', 43), ('trajectory_id', 43), ('t_contr', 3), ('mark_type', 'mark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 2), ('noise_id', 8), ('trajectory_id', 8), ('t_contr', 3), ('mark_type', 'mark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 3), ('noise_id', 40), ('trajectory_id', 40), ('t_contr', 3), ('mark_type', 'noMark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 4), ('noise_id', 13), ('trajectory_id', 13), ('t_contr', 3), ('mark_type', 'noMark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 5), ('noise_id', 77), ('trajectory_id', 77), ('t_contr', 2), ('mark_type', 'mark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 6), ('noise_id', 68), ('trajectory_id', 68), ('t_contr', 2), ('mark_type', 'mark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 7), ('noise_id', 101), ('trajectory_id', 101), ('t_contr', 2), ('mark_type', 'noMark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 8), ('noise_id', 65), ('trajectory_id', 65), ('t_contr', 2), ('mark_type', 'noMark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 9), ('noise_id', 168), ('trajectory_id', 168), ('t_contr', 1), ('mark_type', 'mark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 10), ('noise_id', 130), ('trajectory_id', 130), ('t_contr', 1), ('mark_type', 'mark')]),
      OrderedDict([('prot_id', 0), ('trial_id', 11), ('noise_id', 141), ('trajectory_id', 141), ('t_contr', 1), ('mark_type', 'noMark')])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
    Routine fix
    Routine trial
  LoopTerminator practice_trials
  Routine before_trials
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $prot_file
    loopType = sequential
    nReps = 1
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    Routine fix
    Routine trial
  LoopTerminator trials
  Routine bye
